---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "[Block5]Decoder_Dice_Game"
set subject_parity even
set subject_nr 0
set start dice_task
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/soankim/Downloads/OpenSesame/Dice_Decoder_Scores(240314)"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background gray

define sketchpad ITI
	set duration "[ITI_jitter]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define inline_script average_score
	set description "Executes Python code"
	___run__
	if var.correct == 1:
	    var.score = var.score+1
	__end__
	set _prepare ""

define inline_script avg_score
	set description "Track run offset time"
	___run__
	var.average_score = var.score / (var.trial_cnt-var.tie-var.no_response) * 100
	__end__
	set _prepare ""

define inline_script choice_onset_time
	set description "Executes Python code"
	set _run "var.choice_onset_time = self.time() - var.run_onset_time"
	set _prepare ""

define keyboard_response decision
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_answer]"
	set allowed_responses "1;2"

define inline_script default_variables
	set description "Executes Python code"
	___run__
	var.block = 5
	var.trial_cnt = 0
	var.condition = 'hidden'
	
	var.score = 0
	var.average_score = 0
	
	var.no_response = 0
	var.tie = 0
	__end__
	set _prepare ""

define sketchpad dice_show
	set reset_variables yes
	set duration 3000
	set description "Displays stimuli"
	draw rect color="#c3c3c3" fill=1 h=96 penwidth=2 show_if=always w=192 x=-96 y=-96 z_index=1
	draw image center=1 file="black_dice_q.png" scale=0.2 show_if=always x=-50 y=-50 z_index=0
	draw image center=1 file="black_dice_q.png" scale=0.2 show_if=always x=50 y=-50 z_index=0
	draw image center=1 file="white_dice_[client_die_0].png" scale=0.2 show_if=always x=-50 y=50 z_index=0
	draw image center=1 file="white_dice_[client_die_1].png" scale=0.2 show_if=always x=50 y=50 z_index=0

define sequence dice_task
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run default_variables always
	run global_variables always
	run fMRI_heatup_message always
	run fMRI_heatup_firstvolume always
	run run_onset_time always
	run fMRI_heatup always
	run first_trial_fixation always
	run prediction_loop always
	run avg_score always
	run final_wait always
	run run_offset_time always
	run trial_log always

define feedback emtatar
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=empatar x=0 y=0 z_index=0

define sketchpad fMRI_heatup
	set duration 8000
	set description " "
	draw fixdot color=red show_if=always style=default x=0 y=0 z_index=0

define keyboard_response fMRI_heatup_firstvolume
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "With the first fMRI volume start the experimental run by triggering letter 's' from a trigger box"
	set allowed_responses s

define sketchpad fMRI_heatup_message
	set duration 0
	set description "Show a waiting message during fMRI heatup volumes"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Wait..." x=0 y=0 z_index=0

define feedback final_wait
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="puntuación total:" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="[average_score] %" x=0 y=32 z_index=0

define sketchpad first_trial_fixation
	set duration 1500
	set description "Visual fixation before first trial"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 1000
	set description "Displays stimuli"

define sketchpad fixation_long
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_short
	set duration 500
	set description "Displays stimuli"

define inline_script global_variables
	set description "Global variables"
	set _run ""
	set _prepare "var.new_img = ''"

define feedback prediction_confirm
	set reset_variables yes
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[message]" x=0 y=0 z_index=0
	draw image center=1 file="[chosen_left]" scale=0.15 show_if=always x=-60 y=0 z_index=0
	draw image center=1 file="[chosen_right]" scale=0.15 show_if=always x=60 y=0 z_index=0

define loop prediction_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Category of images that will be used in this example model construction paradigm"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ITI_jitter 4000
	setcycle 0 left lose
	setcycle 0 right win
	setcycle 0 rare 0
	setcycle 0 dealer_show 0
	setcycle 0 client_die_0 4
	setcycle 0 client_die_1 1
	setcycle 0 client_sum 5
	setcycle 0 dealer_die_0 5
	setcycle 0 dealer_die_1 1
	setcycle 0 dealer_sum 6
	setcycle 0 client_losing_prob 0.72
	setcycle 0 is_rare common_lose
	setcycle 0 is_rare_digit 0
	setcycle 0 answer lose
	setcycle 0 correct_answer 1
	setcycle 1 ITI_jitter 5000
	setcycle 1 left win
	setcycle 1 right lose
	setcycle 1 rare 0
	setcycle 1 dealer_show 0
	setcycle 1 client_die_0 2
	setcycle 1 client_die_1 4
	setcycle 1 client_sum 6
	setcycle 1 dealer_die_0 6
	setcycle 1 dealer_die_1 3
	setcycle 1 dealer_sum 9
	setcycle 1 client_losing_prob 0.58
	setcycle 1 is_rare common_lose
	setcycle 1 is_rare_digit 0
	setcycle 1 answer lose
	setcycle 1 correct_answer 2
	setcycle 2 ITI_jitter 6000
	setcycle 2 left lose
	setcycle 2 right win
	setcycle 2 rare 0
	setcycle 2 dealer_show 0
	setcycle 2 client_die_0 1
	setcycle 2 client_die_1 4
	setcycle 2 client_sum 5
	setcycle 2 dealer_die_0 4
	setcycle 2 dealer_die_1 3
	setcycle 2 dealer_sum 7
	setcycle 2 client_losing_prob 0.72
	setcycle 2 is_rare common_lose
	setcycle 2 is_rare_digit 0
	setcycle 2 answer lose
	setcycle 2 correct_answer 1
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	setcycle 9 ITI_jitter 4000
	setcycle 9 left win
	setcycle 9 right lose
	setcycle 9 rare 0
	setcycle 9 dealer_show 0
	setcycle 9 client_die_0 1
	setcycle 9 client_die_1 6
	setcycle 9 client_sum 7
	setcycle 9 dealer_die_0 1
	setcycle 9 dealer_die_1 2
	setcycle 9 dealer_sum 3
	setcycle 9 client_losing_prob 0.42
	setcycle 9 is_rare common_win
	setcycle 9 is_rare_digit 0
	setcycle 9 answer win
	setcycle 9 correct_answer 1
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	setcycle 11 ITI_jitter 6000
	setcycle 11 left win
	setcycle 11 right lose
	setcycle 11 rare 0
	setcycle 11 dealer_show 0
	setcycle 11 client_die_0 6
	setcycle 11 client_die_1 5
	setcycle 11 client_sum 11
	setcycle 11 dealer_die_0 6
	setcycle 11 dealer_die_1 3
	setcycle 11 dealer_sum 9
	setcycle 11 client_losing_prob 0.03
	setcycle 11 is_rare common_win
	setcycle 11 is_rare_digit 0
	setcycle 11 answer win
	setcycle 11 correct_answer 1
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	setcycle 14 ITI_jitter 6000
	setcycle 14 left lose
	setcycle 14 right win
	setcycle 14 rare 0
	setcycle 14 dealer_show 0
	setcycle 14 client_die_0 5
	setcycle 14 client_die_1 4
	setcycle 14 client_sum 9
	setcycle 14 dealer_die_0 3
	setcycle 14 dealer_die_1 5
	setcycle 14 dealer_sum 8
	setcycle 14 client_losing_prob 0.17
	setcycle 14 is_rare common_win
	setcycle 14 is_rare_digit 0
	setcycle 14 answer win
	setcycle 14 correct_answer 2
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	setcycle 18 ITI_jitter 4000
	setcycle 18 left lose
	setcycle 18 right win
	setcycle 18 rare 1
	setcycle 18 dealer_show 0
	setcycle 18 client_die_0 3
	setcycle 18 client_die_1 6
	setcycle 18 client_sum 9
	setcycle 18 dealer_die_0 5
	setcycle 18 dealer_die_1 5
	setcycle 18 dealer_sum 10
	setcycle 18 client_losing_prob 0.17
	setcycle 18 is_rare rare_lose
	setcycle 18 is_rare_digit -1
	setcycle 18 answer lose
	setcycle 18 correct_answer 1
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	setcycle 21 ITI_jitter 4000
	setcycle 21 left win
	setcycle 21 right lose
	setcycle 21 rare 1
	setcycle 21 dealer_show 0
	setcycle 21 client_die_0 5
	setcycle 21 client_die_1 3
	setcycle 21 client_sum 8
	setcycle 21 dealer_die_0 6
	setcycle 21 dealer_die_1 6
	setcycle 21 dealer_sum 12
	setcycle 21 client_losing_prob 0.28
	setcycle 21 is_rare rare_lose
	setcycle 21 is_rare_digit -1
	setcycle 21 answer lose
	setcycle 21 correct_answer 2
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	setcycle 25 ITI_jitter 5000
	setcycle 25 left win
	setcycle 25 right lose
	setcycle 25 rare 1
	setcycle 25 dealer_show 0
	setcycle 25 client_die_0 1
	setcycle 25 client_die_1 2
	setcycle 25 client_sum 3
	setcycle 25 dealer_die_0 1
	setcycle 25 dealer_die_1 1
	setcycle 25 dealer_sum 2
	setcycle 25 client_losing_prob 0.92
	setcycle 25 is_rare rare_win
	setcycle 25 is_rare_digit 1
	setcycle 25 answer win
	setcycle 25 correct_answer 1
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	setcycle 32 ITI_jitter 6000
	setcycle 32 left lose
	setcycle 32 right win
	setcycle 32 rare -1
	setcycle 32 dealer_show 0
	setcycle 32 client_die_0 4
	setcycle 32 client_die_1 5
	setcycle 32 client_sum 9
	setcycle 32 dealer_die_0 6
	setcycle 32 dealer_die_1 3
	setcycle 32 dealer_sum 9
	setcycle 32 client_losing_prob 0.17
	setcycle 32 is_rare tie
	setcycle 32 is_rare_digit 2
	setcycle 32 answer tie
	setcycle 32 correct_answer 0
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	run prediction_seq

define sequence prediction_seq
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run fixation_long always
	run trial_onset_time always
	run dice_show always
	run fixation_short always
	run choice_onset_time always
	run prediction_show always
	run decision always
	run setup_show_chosen_dice always
	run prediction_confirm always
	run fixation_1 always
	run reward_onset_time always
	run zero_euro "([answer]='lose') & ([response_decision]!=None)"
	run ten_euro "([answer]='win') & ([response_decision]!=None)"
	run emtatar "([is_rare] = 'tie') & ([response_decision]!=None)"
	run ITI always
	run average_score always
	run trial_log always

define sketchpad prediction_show
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[left].png" scale=0.15 show_if=always x=-60 y=0 z_index=0
	draw image center=1 file="[right].png" scale=0.15 show_if=always x=60 y=0 z_index=0

define inline_script reward_onset_time
	set description "Track trial onset time"
	set _run "var.reward_onset_time = self.time() - var.run_onset_time"
	set _prepare ""

define inline_script run_offset_time
	set description "Track run offset time"
	___run__
	var.run_offset_time = self.time() - var.run_onset_time
	print("Finished in: ", var.run_offset_time, " milisec, ", var.run_onset_time/60000, " minutes")
	__end__
	set _prepare ""

define inline_script run_onset_time
	set description "Track run onset time"
	___run__
	var.run_onset_time = self.time()
	__end__
	set _prepare ""

define inline_script setup_show_chosen_dice
	set description "Executes Python code"
	___run__
	if var.response_decision == 1:
	    if var.left == 'lose':
	        var.chosen_bet = 'lose'
	    else:
	        var.chosen_bet = 'win'
	    var.chosen_left = var.left+"_selected.png"
	    var.chosen_right = var.right+".png"
	    var.message = ''
	
	elif var.response_decision == 2:
	    if var.left == 'lose':
	        var.chosen_bet = 'win'
	    else:
	        var.chosen_bet = 'lose'
	    var.chosen_left = var.left+".png"
	    var.chosen_right = var.right+"_selected.png"
	    var.message = ''
	
	else:#if var.response_decision == '' or var.response_decision == 'None':
	    var.message = 'time_out'
	    var.chosen_left = 'blank.png'
	    var.chosen_right = 'blank.png'
	    var.chosen_bet = 'time_out'
	    
	    # Update the no_response_counter
	    var.no_response += 1
	
	if var.rare > -1:
	    if var.chosen_bet != 'time_out':
	        if var.chosen_bet == var.answer:
	           var.BET_PE = 0
	    
	        else:
	             var.BET_PE = 1
	    else:
	        var.BET_PE = 'time_out'
	        
	else:
	    var.BET_PE = 'tie'
	    var.tie += 1
	    
	__end__
	set _prepare ""

define feedback ten_euro
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=1 file="ten_euro.png" scale=0.15 show_if=always x=0 y=0 z_index=0

define logger trial_log
	set description "Log this trial information"
	set auto_log yes

define inline_script trial_onset_time
	set description "Executes Python code"
	___run__
	var.dice_onset_time = self.time() - var.run_onset_time
	
	var.trial_cnt = var.trial_cnt + 1
	__end__
	set _prepare ""

define feedback zero_euro
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=1 file="scrambled.png" scale=0.15 show_if=always x=0 y=0 z_index=0

